PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'participant': u'1', u'Name': u'Leo'}
  expName = main
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Introduction
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text:
        Benvenuti!

        State per iniziare un esperimento composto da due parti.
        Ogni parte è introdotta dalle istruzioni che vi spiegheranno ciò che dovete fare in seguito.
        Alla fine della prima parte, ci sarà una piccola pausa indicata da un messaggio. Grazie per la vostra partecipazione all'esperimento!
    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.5
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  Routine question
    TextComponent question_text
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.09
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      text:
        La conclusione segue dalla premesse?


                SI                           NO
    KeyboardComponent response_to_question_text
      forceEndRoutine = True
      allowedKeys = 'a', 'l'
      startVal [time (s)] = 0.0
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  Routine arguments
    TextComponent text
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.1
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      text [set every repeat]:
        'P1: ' + $premise1 +
        '\n\n' +
        'P2: ' + $premise2 +
        '\n_______________________________\n\n' +
        'C: ' + $conclusion
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine feedback
    TextComponent text_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.1
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      text [set every repeat]:
        'P1: ' + $premise1.replace('...', $TW) +
        '\n\n' +
        'P2: ' + $premise2.replace('...', $TW) +
        '\n_______________________________\n\n' +
        'C: ' + $conclusion
Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli/arguments.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'ArgumentNumber': 1, 'TWType': u'O', 'premise2': u'Il ... \xe8 un albero ', 'premise1': u'La prugna contiene il ... ', 'ArgumentType': u'TPFC', 'CorrectAnswer': u'N', 'TW': u'NOCCIOLO', 'ArgumentBlock': u'T', 'conclusion': u'La prugna contiene un albero'},
      {'ArgumentNumber': 2, 'TWType': u'O', 'premise2': u'Un ... scava buche ', 'premise1': u'Una certa quantit\xe0 \xe8 un ... ', 'ArgumentType': u'TPFC', 'CorrectAnswer': u'N', 'TW': u'TASSO', 'ArgumentBlock': u'T', 'conclusion': u'Una certa quantit\xe0 scava buche'},
      {'ArgumentNumber': 3, 'TWType': u'O', 'premise2': u'Un ... \xe8 un fiore ', 'premise1': u'Fabrizio Corona \xe8 un ... ', 'ArgumentType': u'TPFC', 'CorrectAnswer': u'N', 'TW': u' NARCISO', 'ArgumentBlock': u'T', 'conclusion': u'Fabrizio Corona \xe8 un fiore'},
      {'ArgumentNumber': 4, 'TWType': u'O', 'premise2': u'Un ... \xe8 un porcospino ', 'premise1': u'I capelli hanno un ... ', 'ArgumentType': u'TPFC', 'CorrectAnswer': u'N', 'TW': u'RICCIO', 'ArgumentBlock': u'T', 'conclusion': u'I capelli hanno un porcospino'},
      {'ArgumentNumber': 5, 'TWType': u'O', 'premise2': u'Un ... \xe8 un nastro arrotolato ', 'premise1': u'Un capitombolo \xe8 un ... ', 'ArgumentType': u'TPFC', 'CorrectAnswer': u'N', 'TW': u' ROTOLONE', 'ArgumentBlock': u'T', 'conclusion': u'Un capitombolo \xe8 un nastro arrotolato'}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
    Routine arguments
    Routine feedback
    Routine question
  LoopTerminator trials
